#=====================================================
# BEAM
#=====================================================

/gate/source/addSource mybeam phaseSpace
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_00.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_01.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_02.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_03.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_04.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_05.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_06.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_07.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_08.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_09.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_10.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_11.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_12.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_13.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_14.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_15.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_16.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_17.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_18.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_19.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_20.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_21.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_22.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_23.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_24.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_25.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_26.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_27.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_28.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_29.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_30.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_31.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_32.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_33.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_34.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_35.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_36.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_37.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_38.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_39.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_40.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_41.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_42.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_43.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_44.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_45.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_46.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_47.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_48.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_49.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_50.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_51.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_52.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_53.IAEAphsp
/gate/source/mybeam/addPhaseSpaceFile /media/j/3TB/linac-data/beam/TrueBeam_v2_6X_54.IAEAphsp
/gate/source/mybeam/attachTo linacPhSPlane
